# Generated by Configurator on Sat Dec 28 12:57:06 IST 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,Olympus IX83,OlympusIX83,Olympus IX83
Device,Objective,OlympusIX83,Objective
Device,Light Path,OlympusIX83,Light Path
Device,Condenser turret,OlympusIX83,Condenser turret
Device,Polarizer,OlympusIX83,Polarizer
Device,Dichroic 1,OlympusIX83,Dichroic 1
Device,EpiShutter 1,OlympusIX83,EpiShutter 1
Device,DiaShutter,OlympusIX83,DiaShutter
Device,TransmittedIllumination 1,OlympusIX83,TransmittedIllumination 1
Device,TransmittedIllumination 2,OlympusIX83,TransmittedIllumination 2
Device,Transmitted Aperture,OlympusIX83,Transmitted Aperture
Device,FocusDrive,OlympusIX83,FocusDrive
Device,XYStage,OlympusIX83,XYStage
Device,Autofocus,OlympusIX83,Autofocus
Device,AutofocusDrive,OlympusIX83,AutofocusDrive
Device,left_port,AndorSDK3,Andor sCMOS Camera
Device,pE4000,pE4000,pE4000
Device,right_port,AndorSDK3,Andor sCMOS Camera

# Pre-init settings for devices
Property,pE4000,Port,COM4

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,Objective,Olympus IX83
Parent,Light Path,Olympus IX83
Parent,Condenser turret,Olympus IX83
Parent,Polarizer,Olympus IX83
Parent,Dichroic 1,Olympus IX83
Parent,EpiShutter 1,Olympus IX83
Parent,DiaShutter,Olympus IX83
Parent,TransmittedIllumination 1,Olympus IX83
Parent,TransmittedIllumination 2,Olympus IX83
Parent,Transmitted Aperture,Olympus IX83
Parent,FocusDrive,Olympus IX83
Parent,XYStage,Olympus IX83
Parent,Autofocus,Olympus IX83
Parent,AutofocusDrive,Olympus IX83

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,1
FocusDirection,AutofocusDrive,1

# Roles
Property,Core,Camera,left_port
Property,Core,Shutter,EpiShutter 1
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,6-40X_0.95
Label,Objective,4,5-100X
Label,Objective,3,4-60X
Label,Objective,2,3-40X
Label,Objective,1,2-20X
Label,Objective,0,1-10X
# Light Path
Label,Light Path,2,3-Eyepiece
Label,Light Path,1,2-50-50
Label,Light Path,0,1-LeftPort
# Condenser turret
Label,Condenser turret,6,7-NONE
Label,Condenser turret,5,6-NONE
Label,Condenser turret,4,5-NONE
Label,Condenser turret,3,4-NONE
Label,Condenser turret,2,3-IX2-DIC10
Label,Condenser turret,1,2-IX-PH2
Label,Condenser turret,0,1-IX-PHC
# Polarizer
Label,Polarizer,1,2-In
Label,Polarizer,0,1-Out
# Dichroic 1
Label,Dichroic 1,7,8-NONE
Label,Dichroic 1,6,7-EGFP
Label,Dichroic 1,5,6-CY5
Label,Dichroic 1,4,5-TxRed
Label,Dichroic 1,3,4-TRITC
Label,Dichroic 1,2,3-FITC
Label,Dichroic 1,1,2-DAPI
Label,Dichroic 1,0,1-BF

# Configuration presets
# Group: objective
# Preset: 40
ConfigGroup,objective,40,Objective,Label,3-40X
ConfigGroup,objective,40,Objective,State,2

# Preset: 60
ConfigGroup,objective,60,Objective,Label,4-60X
ConfigGroup,objective,60,Objective,State,3

# Preset: 10
ConfigGroup,objective,10,Objective,Label,1-10X
ConfigGroup,objective,10,Objective,State,0

# Preset: 100
ConfigGroup,objective,100,Objective,Label,5-100X
ConfigGroup,objective,100,Objective,State,4

# Preset: 20
ConfigGroup,objective,20,Objective,Label,2-20X
ConfigGroup,objective,20,Objective,State,1


# Group: Channel

# Group: System
# Preset: Startup


# Group: channel
# Preset: TRITC
ConfigGroup,channel,TRITC,Light Path,Label,1-LeftPort
ConfigGroup,channel,TRITC,Condenser turret,Label,4-NONE
ConfigGroup,channel,TRITC,Polarizer,Label,1-Out
ConfigGroup,channel,TRITC,Dichroic 1,Label,4-TRITC
ConfigGroup,channel,TRITC,TransmittedIllumination 1,Brightness,0
ConfigGroup,channel,TRITC,TransmittedIllumination 2,Brightness,0
ConfigGroup,channel,TRITC,Transmitted Aperture,DiameterAsPercent,41
ConfigGroup,channel,TRITC,pE4000,ChannelA,405
ConfigGroup,channel,TRITC,pE4000,ChannelB,490
ConfigGroup,channel,TRITC,pE4000,ChannelC,550
ConfigGroup,channel,TRITC,pE4000,ChannelD,635
ConfigGroup,channel,TRITC,pE4000,IntensityA,0
ConfigGroup,channel,TRITC,pE4000,IntensityB,0
ConfigGroup,channel,TRITC,pE4000,IntensityC,10
ConfigGroup,channel,TRITC,pE4000,IntensityD,0
ConfigGroup,channel,TRITC,pE4000,Lock Pod,0
ConfigGroup,channel,TRITC,pE4000,SelectionA,1
ConfigGroup,channel,TRITC,pE4000,SelectionB,1
ConfigGroup,channel,TRITC,pE4000,SelectionC,1
ConfigGroup,channel,TRITC,pE4000,SelectionD,1
ConfigGroup,channel,TRITC,pE4000,Global State,0
ConfigGroup,channel,TRITC,Core,Shutter,pE4000
ConfigGroup,channel,TRITC,EpiShutter 1,State,1

# Preset: FITC
ConfigGroup,channel,FITC,Light Path,Label,1-LeftPort
ConfigGroup,channel,FITC,Condenser turret,Label,4-NONE
ConfigGroup,channel,FITC,Polarizer,Label,1-Out
ConfigGroup,channel,FITC,Dichroic 1,Label,3-FITC
ConfigGroup,channel,FITC,TransmittedIllumination 1,Brightness,0
ConfigGroup,channel,FITC,TransmittedIllumination 2,Brightness,0
ConfigGroup,channel,FITC,Transmitted Aperture,DiameterAsPercent,41
ConfigGroup,channel,FITC,pE4000,ChannelA,405
ConfigGroup,channel,FITC,pE4000,ChannelB,490
ConfigGroup,channel,FITC,pE4000,ChannelC,550
ConfigGroup,channel,FITC,pE4000,ChannelD,635
ConfigGroup,channel,FITC,pE4000,IntensityA,0
ConfigGroup,channel,FITC,pE4000,IntensityB,10
ConfigGroup,channel,FITC,pE4000,IntensityC,0
ConfigGroup,channel,FITC,pE4000,IntensityD,0
ConfigGroup,channel,FITC,pE4000,Lock Pod,0
ConfigGroup,channel,FITC,pE4000,SelectionA,1
ConfigGroup,channel,FITC,pE4000,SelectionB,1
ConfigGroup,channel,FITC,pE4000,SelectionC,1
ConfigGroup,channel,FITC,pE4000,SelectionD,1
ConfigGroup,channel,FITC,pE4000,Global State,0
ConfigGroup,channel,FITC,Core,Shutter,pE4000
ConfigGroup,channel,FITC,EpiShutter 1,State,1

# Preset: TxRed
ConfigGroup,channel,TxRed,Light Path,Label,1-LeftPort
ConfigGroup,channel,TxRed,Condenser turret,Label,4-NONE
ConfigGroup,channel,TxRed,Polarizer,Label,1-Out
ConfigGroup,channel,TxRed,Dichroic 1,Label,5-TxRed
ConfigGroup,channel,TxRed,TransmittedIllumination 1,Brightness,0
ConfigGroup,channel,TxRed,TransmittedIllumination 2,Brightness,0
ConfigGroup,channel,TxRed,Transmitted Aperture,DiameterAsPercent,41
ConfigGroup,channel,TxRed,pE4000,ChannelA,405
ConfigGroup,channel,TxRed,pE4000,ChannelB,490
ConfigGroup,channel,TxRed,pE4000,ChannelC,595
ConfigGroup,channel,TxRed,pE4000,ChannelD,635
ConfigGroup,channel,TxRed,pE4000,IntensityA,0
ConfigGroup,channel,TxRed,pE4000,IntensityB,0
ConfigGroup,channel,TxRed,pE4000,IntensityC,10
ConfigGroup,channel,TxRed,pE4000,IntensityD,0
ConfigGroup,channel,TxRed,pE4000,Lock Pod,0
ConfigGroup,channel,TxRed,pE4000,SelectionA,1
ConfigGroup,channel,TxRed,pE4000,SelectionB,1
ConfigGroup,channel,TxRed,pE4000,SelectionC,1
ConfigGroup,channel,TxRed,pE4000,SelectionD,1
ConfigGroup,channel,TxRed,pE4000,Global State,0
ConfigGroup,channel,TxRed,Core,Shutter,pE4000
ConfigGroup,channel,TxRed,EpiShutter 1,State,1

# Preset: BF
ConfigGroup,channel,BF,Light Path,Label,1-LeftPort
ConfigGroup,channel,BF,Condenser turret,Label,4-NONE
ConfigGroup,channel,BF,Polarizer,Label,1-Out
ConfigGroup,channel,BF,Dichroic 1,Label,1-BF
ConfigGroup,channel,BF,TransmittedIllumination 1,Brightness,0
ConfigGroup,channel,BF,TransmittedIllumination 2,Brightness,64
ConfigGroup,channel,BF,Transmitted Aperture,DiameterAsPercent,41
ConfigGroup,channel,BF,DiaShutter,State,1
ConfigGroup,channel,BF,pE4000,ChannelA,405
ConfigGroup,channel,BF,pE4000,ChannelB,490
ConfigGroup,channel,BF,pE4000,ChannelC,550
ConfigGroup,channel,BF,pE4000,ChannelD,635
ConfigGroup,channel,BF,pE4000,IntensityA,0
ConfigGroup,channel,BF,pE4000,IntensityB,0
ConfigGroup,channel,BF,pE4000,IntensityC,0
ConfigGroup,channel,BF,pE4000,IntensityD,0
ConfigGroup,channel,BF,pE4000,Lock Pod,0
ConfigGroup,channel,BF,pE4000,SelectionA,1
ConfigGroup,channel,BF,pE4000,SelectionB,1
ConfigGroup,channel,BF,pE4000,SelectionC,1
ConfigGroup,channel,BF,pE4000,SelectionD,1
ConfigGroup,channel,BF,pE4000,Global State,0

# Preset: DAPI
ConfigGroup,channel,DAPI,Light Path,Label,1-LeftPort
ConfigGroup,channel,DAPI,Condenser turret,Label,4-NONE
ConfigGroup,channel,DAPI,Polarizer,Label,1-Out
ConfigGroup,channel,DAPI,Dichroic 1,Label,2-DAPI
ConfigGroup,channel,DAPI,TransmittedIllumination 1,Brightness,0
ConfigGroup,channel,DAPI,TransmittedIllumination 2,Brightness,0
ConfigGroup,channel,DAPI,Transmitted Aperture,DiameterAsPercent,41
ConfigGroup,channel,DAPI,pE4000,ChannelA,405
ConfigGroup,channel,DAPI,pE4000,ChannelB,490
ConfigGroup,channel,DAPI,pE4000,ChannelC,550
ConfigGroup,channel,DAPI,pE4000,ChannelD,635
ConfigGroup,channel,DAPI,pE4000,IntensityA,10
ConfigGroup,channel,DAPI,pE4000,IntensityB,0
ConfigGroup,channel,DAPI,pE4000,IntensityC,0
ConfigGroup,channel,DAPI,pE4000,IntensityD,0
ConfigGroup,channel,DAPI,pE4000,Lock Pod,0
ConfigGroup,channel,DAPI,pE4000,SelectionA,1
ConfigGroup,channel,DAPI,pE4000,SelectionB,1
ConfigGroup,channel,DAPI,pE4000,SelectionC,1
ConfigGroup,channel,DAPI,pE4000,SelectionD,1
ConfigGroup,channel,DAPI,pE4000,Global State,0
ConfigGroup,channel,DAPI,Core,Shutter,pE4000
ConfigGroup,channel,DAPI,EpiShutter 1,State,1

# Preset: Cy5
ConfigGroup,channel,Cy5,Light Path,Label,1-LeftPort
ConfigGroup,channel,Cy5,Condenser turret,Label,4-NONE
ConfigGroup,channel,Cy5,Polarizer,Label,1-Out
ConfigGroup,channel,Cy5,Dichroic 1,Label,6-CY5
ConfigGroup,channel,Cy5,TransmittedIllumination 1,Brightness,0
ConfigGroup,channel,Cy5,TransmittedIllumination 2,Brightness,0
ConfigGroup,channel,Cy5,Transmitted Aperture,DiameterAsPercent,41
ConfigGroup,channel,Cy5,pE4000,ChannelA,405
ConfigGroup,channel,Cy5,pE4000,ChannelB,490
ConfigGroup,channel,Cy5,pE4000,ChannelC,550
ConfigGroup,channel,Cy5,pE4000,ChannelD,635
ConfigGroup,channel,Cy5,pE4000,IntensityA,0
ConfigGroup,channel,Cy5,pE4000,IntensityB,0
ConfigGroup,channel,Cy5,pE4000,IntensityC,0
ConfigGroup,channel,Cy5,pE4000,IntensityD,10
ConfigGroup,channel,Cy5,pE4000,Lock Pod,0
ConfigGroup,channel,Cy5,pE4000,SelectionA,1
ConfigGroup,channel,Cy5,pE4000,SelectionB,1
ConfigGroup,channel,Cy5,pE4000,SelectionC,1
ConfigGroup,channel,Cy5,pE4000,SelectionD,1
ConfigGroup,channel,Cy5,pE4000,Global State,0
ConfigGroup,channel,Cy5,Core,Shutter,pE4000
ConfigGroup,channel,Cy5,EpiShutter 1,State,1

# Preset: EGFP
ConfigGroup,channel,EGFP,Light Path,Label,1-LeftPort
ConfigGroup,channel,EGFP,Condenser turret,Label,4-NONE
ConfigGroup,channel,EGFP,Polarizer,Label,1-Out
ConfigGroup,channel,EGFP,Dichroic 1,Label,7-EGFP
ConfigGroup,channel,EGFP,TransmittedIllumination 1,Brightness,0
ConfigGroup,channel,EGFP,TransmittedIllumination 2,Brightness,0
ConfigGroup,channel,EGFP,Transmitted Aperture,DiameterAsPercent,41
ConfigGroup,channel,EGFP,pE4000,ChannelA,405
ConfigGroup,channel,EGFP,pE4000,ChannelB,490
ConfigGroup,channel,EGFP,pE4000,ChannelC,595
ConfigGroup,channel,EGFP,pE4000,ChannelD,635
ConfigGroup,channel,EGFP,pE4000,IntensityA,0
ConfigGroup,channel,EGFP,pE4000,IntensityB,10
ConfigGroup,channel,EGFP,pE4000,IntensityC,0
ConfigGroup,channel,EGFP,pE4000,IntensityD,0
ConfigGroup,channel,EGFP,pE4000,Lock Pod,0
ConfigGroup,channel,EGFP,pE4000,SelectionA,1
ConfigGroup,channel,EGFP,pE4000,SelectionB,1
ConfigGroup,channel,EGFP,pE4000,SelectionC,1
ConfigGroup,channel,EGFP,pE4000,SelectionD,1
ConfigGroup,channel,EGFP,pE4000,Global State,0
ConfigGroup,channel,EGFP,Core,Shutter,pE4000
ConfigGroup,channel,EGFP,EpiShutter 1,State,1



# PixelSize settings

