# Generated by Configurator on Wed Jan 10 12:06:46 PST 2007

# Reset
Property,Core,Initialize,0

# Devices
Device,Camera,DemoCamera,DCam
Device,Dichroic,DemoCamera,DWheel
Device,Emission,DemoCamera,DWheel
Device,Excitation,DemoCamera,DWheel
Device,Objective,DemoCamera,DObjective
Device,Z,DemoCamera,DStage
Device,Path,DemoCamera,DLightPath
Device,XYStage,DemoCamera,DXYStage

# Pre-init settings for devices

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Camera
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Dichroic
Label,Dichroic,9,State-9
Label,Dichroic,8,State-8
Label,Dichroic,7,State-7
Label,Dichroic,6,State-6
Label,Dichroic,5,State-5
Label,Dichroic,4,State-4
Label,Dichroic,3,State-3
Label,Dichroic,2,Q585LP
Label,Dichroic,1,Q505LP
Label,Dichroic,0,400DCLP
# Emission
Label,Emission,9,State-9
Label,Emission,8,State-8
Label,Emission,7,State-7
Label,Emission,6,State-6
Label,Emission,5,State-5
Label,Emission,4,State-4
Label,Emission,3,Chroma-HQ700
Label,Emission,2,Chroma-HQ535
Label,Emission,1,Chroma-D460
Label,Emission,0,Chroma-HQ620
# Excitation
Label,Excitation,9,State-9
Label,Excitation,8,State-8
Label,Excitation,7,State-7
Label,Excitation,6,State-6
Label,Excitation,5,State-5
Label,Excitation,4,State-4
Label,Excitation,3,Chroma-HQ620
Label,Excitation,2,Chroma-HQ570
Label,Excitation,1,Chroma-HQ480
Label,Excitation,0,Chroma-D360
# Objective
Label,Objective,5,Objective-5
Label,Objective,4,Objective-4
Label,Objective,3,Nikon 20X Plan Fluor ELWD
Label,Objective,2,Objective-2
Label,Objective,1,Nikon 10X S Fluor
Label,Objective,0,Nikon 40X Plan Flueor ELWD

# Configuration presets
# Group: Camera
# Preset: MedRes
ConfigGroup,Camera,MedRes,Camera,Binning,2
ConfigGroup,Camera,MedRes,Camera,PixelType,8bit

# Preset: Default
ConfigGroup,Camera,Default,Camera,Binning,1
ConfigGroup,Camera,Default,Camera,PixelType,8bit

# Preset: LowRes
ConfigGroup,Camera,LowRes,Camera,Binning,4
ConfigGroup,Camera,LowRes,Camera,PixelType,8bit

# Preset: HiRes
ConfigGroup,Camera,HiRes,Camera,Binning,1
ConfigGroup,Camera,HiRes,Camera,PixelType,16bit


# Group: Objective
# Preset: 20X
ConfigGroup,objective,20,Objective,State,3

# Preset: 40X
ConfigGroup,objective,40,Objective,State,0

# Preset: 10X
ConfigGroup,objective,10,Objective,State,1


# Group: Channel
# Preset: FITC
ConfigGroup,channel,FITC,Dichroic,Label,Q505LP
ConfigGroup,channel,FITC,Emission,Label,Chroma-HQ535
ConfigGroup,channel,FITC,Excitation,Label,Chroma-HQ480

# Preset: Rhodamine
ConfigGroup,channel,Rhodamine,Dichroic,Label,Q585LP
ConfigGroup,channel,Rhodamine,Emission,Label,Chroma-HQ700
ConfigGroup,channel,Rhodamine,Excitation,Label,Chroma-HQ570

# Preset: DAPI
ConfigGroup,channel,DAPI,Dichroic,Label,400DCLP
ConfigGroup,channel,DAPI,Emission,Label,Chroma-HQ620
ConfigGroup,channel,DAPI,Excitation,Label,Chroma-D360

# Preset: Cy5
ConfigGroup,channel,Cy5,Dichroic,Label,400DCLP
ConfigGroup,channel,Cy5,Emission,Label,Chroma-HQ700
ConfigGroup,channel,Cy5,Excitation,Label,Chroma-HQ570


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera,CCDTemperature,-85.26
ConfigGroup,System,Startup,Camera,Gain,3

# Preset: Shutdown
ConfigGroup,System,Shutdown,Camera,CCDTemperature,0.00
ConfigGroup,System,Shutdown,Camera,Gain,0


# Group: LightPath
# Preset: Camera-left
ConfigGroup,LightPath,Camera-left,Path,State,1

# Preset: Eyepiece
ConfigGroup,LightPath,Eyepiece,Path,State,0

# Preset: Camera-right
ConfigGroup,LightPath,Camera-right,Path,State,2


# PixelSize settings
# Resolution preset: 20x
ConfigPixelSize,20x,Objective,Label,Nikon 20X Plan Fluor ELWD
PixelSize_um,20x,0.5

# Resolution preset: 40x
ConfigPixelSize,40x,Objective,Label,Nikon 40X Plan Flueor ELWD
PixelSize_um,40x,0.25

# Resolution preset: 10x
ConfigPixelSize,10x,Objective,Label,Nikon 10X S Fluor
PixelSize_um,10x,1.0